PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Pseudonym'], expName, expInfo['date'])
  Experiment info = {'Pseudonym': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1536, 864]
  expName = rdk-discrimination
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Routines
  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Willkommen zum Experiment
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Dots
    TextComponent cue
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = ➔
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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    DotsComponent dots
      coherence = 0.05
      dir = 0.0
      dotLife = 3
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.0125
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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    KeyboardComponent dots_main_keyboard_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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  Routine Feedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if dots_main_keyboard_resp.keys is None:
            response_text = "miss"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast'.
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif dots_main_keyboard_resp.rt <= 0.1:
            response_text = "too fast"

        else:
            response_text = "other feedback"


        print(dots_main_keyboard_resp.rt)
    TextComponent main_feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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Flow
  Routine Dots
  Routine Feedback
